CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'âx80x94', 'Load each channel (or stain) as a separate image.  If you have a color image composed of different stains, youâx80x99ll need to specify the image type as âx80x98Color imageâx80x99 and then use a ColorToGray module in the Analysis modula panel to separate the incoming image into its component channels.', '', 'In the example pipeline, we call the two images OrigStain1 and OrigStain2.']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
    Assign a name to:Images matching rules
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    Match metadata:[{'DAPI': 'Series', 'YFP': 'Series', 'A594': 'Series', 'CY3': 'Series'}, {'DAPI': 'Z', 'YFP': 'Z', 'A594': 'Z', 'CY3': 'Z'}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelName "DAPI") (image does isstackframe)
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelName "YFP") (image does isstackframe)
    Name to assign these images:YFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelName "A594") (image does isstackframe)
    Name to assign these images:A594
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelName "CY3") (image does isstackframe)
    Name to assign these images:CY3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Series

MakeProjection:[module_num:5|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notes:['max intensity projection on yfp']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
    Select the input image:YFP
    Type of projection:Maximum
    Name the output image:YFPmaxProjection
    Frequency:6.0

MakeProjection:[module_num:6|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
    Select the input image:CY3
    Type of projection:Maximum
    Name the output image:CY3MaxProjection
    Frequency:6.0

MakeProjection:[module_num:7|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
    Select the input image:DAPI
    Type of projection:Maximum
    Name the output image:DAPIMaxProjection
    Frequency:6.0

MakeProjection:[module_num:8|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
    Select the input image:A594
    Type of projection:Maximum
    Name the output image:A594MaxProjection
    Frequency:6.0

SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:A594MaxProjection
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:A594
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop/07022021_nutlinctcf/ctcf_nutlin
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:YFPmaxProjection
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:YFP
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop/07022021_nutlinctcf/ctcf_nutlin
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:DAPIMaxProjection
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:DAPI
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop/07022021_nutlinctcf/ctcf_nutlin
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:CY3MaxProjection
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:CY3
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop/07022021_nutlinctcf/ctcf_nutlin
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

CorrectIlluminationCalculate:[module_num:13|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notes:['Perform illumination correction using the Regular method and polynomial fitting to create a illumination correction function for the first image. ']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enabled:False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
    Select the input image:A647
    Name the output image:A647_correct
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:14|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notes:['Perform illumination correction using the Regular method and polynomial fitting to create a illumination correction function for the second image. ']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enabled:False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
    Select the input image:YFP
    Name the output image:YFP_correct
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:15|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notes:['Apply the illumination function to the original images and examine the result.']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enabled:False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
    Select the input image:YFPmaxProjection
    Name the output image:CorrectedYPF
    Select the illumination function:YFP_correct
    Select how the illumination function is applied:Divide
    Select the input image:A647MaxProjection
    Name the output image:CorrectedA647
    Select the illumination function:A647_correct
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

Align:[module_num:16|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notes:['(Optional) Since accurate colocalization requires accurate positioning of the features in both images, it is sometimes worth using this module to align the images.', '', 'If aligning the images, it is important to remember that there needs to be sufficient overlap in image features, other than the features suspected of overlapping, in order to align them. For example, attempting to align two images in which there is little to no colocalization will probably result in poor alignment. ']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Keep size
    Select the first input image:OrigStain1
    Name the first output image:Stain1
    Select the second input image:OrigStain2
    Name the second output image:Stain2

IdentifyPrimaryObjects:[module_num:17|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notes:['this is for our 60x image, the pixel range of nuclei is roughly 80~300', 'and threshhold 0.5 to isolate nuclei.', 'will need to change if using other resolution.', '', 'Similarly, correlation measurements for individual objects can also be obtained. However, to determine colocalization on per-object basis, the objects within the image must be identified.  We first segment the image features into objects, then make comparisons between the individual objects in the channels.', '', 'The input image is selected as Stain1, with the output objects named Objects1. The typical diameter is set as [3,15] for the min/max size we expect the objects to be. We chose to discard small and large objects, which tend to be spurious, and discard those objects at the border because we will be making area-based measurements.', '', 'The chosen thresholding method can greatly affect segmentation.  Here, you want to select a method that will accurately identify the protein of interest as foreground.  Depending on the background level and properties of the stain, you may need to try several different methods and corresponding settings to obtain good segmentation.  Please see the help for IdentifyPrimaryObjects for more information on the thresholding methods available.', '', 'Settings to distinguish clumped objects are of importance for per-object measures of co-localization.  For example, if you wish to measure co-localization only in the nuclei or cytoplasm, each sub cellular compartment must be properly segmented to provide an accurate measurement.  You may need to adjust various settings to get good segmentation of clumpy nuclei. ']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enabled:False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
    Select the input image:DAPI
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):80,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureColocalization:[module_num:18|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notes:['The Measure Correlation module measures both the correlation of Stain1 and Stain2 across the entire image.  The overall image correlation can give a general sense of how colocalized the features within the images are.', '', 'The correlation measurement is the normalized covariance (covariance divided by the product of standard deviation of pixels in each image). Correlation ranges from -1 (complete inverse correlation) to +1 (complete correlation). Thus, the closer to one the correlation measurement is, the more correlated the two images are and the higher the amount of colocalization.', '', 'Note that if you are not interested in object-based calculations, you could stop here and remove the modules up to the ExportToSpreadsheet module.']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enabled:False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
    Select images to measure:A647MaxProjection, YFPmaxProjection
    Set threshold as percentage of maximum intensity for the images:80
    Select where to measure correlation:Within objects
    Select objects to measure:nuclei
    Run all metrics?:Yes
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    Method for Costes thresholding:Accurate

ExportToSpreadsheet:[module_num:19|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notes:['This module is used to export the full set of measurements obtained by the pipeline. Measurements such as object counts, colocalization percentages and area fractions are saved to a per-image file (that is, one value per image); measurements such as colocalized/non-colocalized status and centroid distances are saved to a per-object file (one value per object).']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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|OneDrive/affair/2021nucspeckle/myData/ImageProcessed/12312021_speckleCTCF
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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