Key	Value
CellProfiler_Version	4.2.1
ChannelType_CY3	Grayscale
ChannelType_DAPI	Grayscale
ChannelType_YFP	Grayscale
ImageSet_Zip_Dictionary	b'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'
Metadata_Tags	"[""ImageNumber""]"
Pipeline_Pipeline	"CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:39
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain ""DAPI"")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain ""YFP"")
    Name to assign these images:YFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain ""CY3"")
    Name to assign these images:CY3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:YFP
    Name the output image:YFPfunc
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:CY3
    Name the output image:CY3func
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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enabled:False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
    Select the input image:A647
    Name the output image:A647func
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:8|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
    Select the input image:YFP
    Name the output image:YFPcorrected
    Select the illumination function:YFPfunc
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:9|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
    Select the input image:CY3
    Name the output image:CY3corrected
    Select the illumination function:CY3func
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:10|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enabled:False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
    Select the input image:A647
    Name the output image:A647corrected
    Select the illumination function:A647func
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:11|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notes:['Identify nuclei in the DAPI image, including those that touch edge of image (preNucleiWithEdges).']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
    Select the input image:DAPI
    Name the primary objects to be identified:preNucleiWithEdges
    Typical diameter of objects, in pixel units (Min,Max):100,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:100
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    Thresholding method:Otsu

ExpandOrShrinkObjects:[module_num:12|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notes:['I add this step to eliminate spots right on edge of nucleus, which are mostly noise.']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
    Select the input objects:preNucleiWithEdges
    Name the output objects:NucleiShrinked
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
    Fill holes in objects so that all objects shrink to a single point?:No

MedianFilter:[module_num:13|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
    Select the input image:CY3corrected
    Name the output image:CY3GF
    Window:1

EnhanceOrSuppressFeatures:[module_num:14|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
    Select the input image:CY3GF
    Name the output image:CY3GFenhance
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Slow
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
EnhanceOrSuppressFeatures:[module_num:15|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
    Select the input image:CY3GFenhance
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Suppress
    Feature size:5
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
MaskImage:[module_num:16|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notes:['Remove nuclear (Nuclei) regions from ""signal"" image, producing ‘Signal_in_Nuclei’ image.']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
    Select the input image:CY3GFenhance
    Name the output image:CY3_in_Nuclei
    Use objects or an image as a mask?:Objects
    Select object for mask:NucleiShrinked
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:17|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notes:['Identify nuclear signals (FISH signals).']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
    Select the input image:CY3_in_Nuclei
    Name the primary objects to be identified:CY3spot
    Typical diameter of objects, in pixel units (Min,Max):2,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:4
    Lower and upper bounds on threshold:0.0,0.8
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    Size of adaptive window:20
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    Thresholding method:Sauvola

EnhanceOrSuppressFeatures:[module_num:18|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
    Select the input image:YFPcorrected
    Name the output image:EnhanceSpeckle
    Select the operation:Enhance
    Feature size:30
    Feature type:Speckles
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    Speed and accuracy:Slow
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
MaskImage:[module_num:19|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
    Select the input image:EnhanceSpeckle
    Name the output image:SpeckleNucleus
    Use objects or an image as a mask?:Objects
    Select object for mask:preNucleiWithEdges
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:20|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notes:['identify speckle. threshold here is changed due to different signal from 647.']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
    Select the input image:SpeckleNucleus
    Name the primary objects to be identified:SpeckleFinal
    Typical diameter of objects, in pixel units (Min,Max):5,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0,1.0
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    Size of adaptive window:200
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
    Thresholding method:Robust Background

RelateObjects:[module_num:21|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
    Parent objects:CY3spot
    Child objects:preNucleiWithEdges
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:22|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
    Parent objects:preNucleiWithEdges
    Child objects:CY3spot
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:23|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
    Parent objects:NucleiShrinked
    Child objects:SpeckleFinal
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
IdentifySecondaryObjects:[module_num:24|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notes:['identify edge of called ']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
    Select the input objects:SpeckleFinal
    Name the objects to be identified:SpeckleFinalEdge
    Select the method to identify the secondary objects:Propagation
    Select the input image:SpeckleNucleus
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0,1.0
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    Size of adaptive window:200
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
    Thresholding method:Robust Background

ConvertImageToObjects:[module_num:25|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enabled:False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
    Name the output object:ConvertImageToObjects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertObjectsToImage:[module_num:26|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
    Select the input objects:SpeckleFinal
    Name the output image:specfinalima
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:27|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
    Select the input objects:CY3spot
    Name the output image:cy3binary
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:28|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:specklereverse
    Image or measurement?:Image
    Select the first image:specfinalima
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Morph:[module_num:29|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notes:['In this step, absolute pixel no. are calculated based on how far a spot is to its closest speckle calling. ']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
    Select the input image:specklereverse
    Name the output image:howfarfromSPEC
    Select the operation to perform:distance
    Number of times to repeat operation:Once
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    Rescale values from 0 to 1?:No

MeasureObjectOverlap:[module_num:30|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enabled:False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
    Select the objects to be used as the ground truth basis for calculating the amount of overlap:SpeckleFinal
    Select the objects to be tested for overlap against the ground truth:CY3spot
    Calculate earth mover's distance?:Yes
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:5000
    Penalize missing pixels:No

MeasureObjectIntensity:[module_num:31|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enabled:False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
    Select images to measure:howfarfromSPEC
    Select objects to measure:CY3spot

MeasureObjectNeighbors:[module_num:32|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
    Select objects to measure:CY3spot
    Select neighboring objects to measure:SpeckleFinalEdge
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectSizeShape:[module_num:33|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
    Select object sets to measure:CY3spot, SpeckleFinal, preNucleiWithEdges
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

OverlayOutlines:[module_num:34|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notes:['Create new image files as reference of tss calling']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:EnhanceSpeckle
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#3BFF20
    Select objects to display:preNucleiWithEdges
    Select outline color:#CF17BC
    Select objects to display:CY3spot
    Select outline color:#74BEA5
    Select objects to display:SpeckleFinal

MaskObjects:[module_num:35|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
    Select objects to be masked:NucleiShrinked
    Name the masked objects:MaskedNuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CY3spot
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

DisplayDataOnImage:[module_num:36|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
    Display object or image measurements?:Object
    Select the input objects:MaskedNuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:OrigOverlay
    Text color:#FF0000
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):13
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
MeasureObjectIntensity:[module_num:37|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notes:['measure intron background in nuclei. this could be changed to other source, say exon intensity.']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
    Select images to measure:CY3, howfarfromSPEC
    Select objects to measure:CY3spot

SaveImages:[module_num:38|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notes:['Savely newly created images from previous step.']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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:CY3
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:segment
    Saved file format:png
    Output file location:Same folder as image|/Volumes/Classified/Image/04132022DNAFISH/aux2/result/3_2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:39|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notes:['Output relevant data to .csv file.']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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop/102024sccctcfg/matlabtesting/CP
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:preNucleiWithEdges|AreaShape_Zernike_6_4,preNucleiWithEdges|AreaShape_Zernike_6_6,preNucleiWithEdges|AreaShape_Zernike_6_2,preNucleiWithEdges|AreaShape_Zernike_6_0,preNucleiWithEdges|AreaShape_Zernike_1_1,preNucleiWithEdges|AreaShape_Zernike_2_2,preNucleiWithEdges|AreaShape_Zernike_2_0,preNucleiWithEdges|AreaShape_Zernike_8_2,preNucleiWithEdges|AreaShape_Zernike_8_0,preNucleiWithEdges|AreaShape_Zernike_8_8,preNucleiWithEdges|AreaShape_Zernike_8_4,preNucleiWithEdges|AreaShape_Zernike_8_6,preNucleiWithEdges|AreaShape_Zernike_3_3,preNucleiWithEdges|AreaShape_Zernike_3_1,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:nutlinneg
    Overwrite existing files without warning?:No
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"
Run_Timestamp	2022-11-11T15:54:47.891341
