CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:60
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "YFP")
    Name to assign these images:YFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "A594")
    Name to assign these images:A594
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CY3")
    Name to assign these images:CY3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:A594
    Name the output image:A594func
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:A594
    Name the output image:A594corrected
    Select the illumination function:A594func
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:YFP
    Name the output image:YFPfunc
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:8|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
    Select the input image:YFP
    Name the output image:YFPcorrected
    Select the illumination function:YFPfunc
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:9|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notes:['Identify nuclei in the DAPI image, but exclude those that touch edge of image ("Nuclei").']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):120,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:80
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:10|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notes:['Identify nuclei in the DAPI image, including those that touch edge of image (preNucleiWithEdges).']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
    Select the input image:DAPI
    Name the primary objects to be identified:preNucleiWithEdges
    Typical diameter of objects, in pixel units (Min,Max):100,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

ExpandOrShrinkObjects:[module_num:11|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notes:['Expand preNucleiWithEdges (NucleiWithEdges)']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enabled:False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
    Select the input objects:preNucleiWithEdges
    Name the output objects:NucleiWithEdges
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:20
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
MaskImage:[module_num:12|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notes:['Remove nuclear (NucleiWithEdges) regions from "signal" image, producing ‘MaskSignal’ image.']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
    Select the input image:A594corrected
    Name the output image:MaskA594
    Use objects or an image as a mask?:Objects
    Select object for mask:preNucleiWithEdges
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    Invert the mask?:Yes

MaskImage:[module_num:13|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notes:['Remove nuclear (Nuclei) regions from "signal" image, producing ‘Signal_in_Nuclei’ image.']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
    Select the input image:A594corrected
    Name the output image:A594_in_Nuclei
    Use objects or an image as a mask?:Objects
    Select object for mask:preNucleiWithEdges
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    Invert the mask?:No

MaskImage:[module_num:14|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
    Select the input image:CY3
    Name the output image:CY3_in_Nuclei
    Use objects or an image as a mask?:Objects
    Select object for mask:preNucleiWithEdges
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    Invert the mask?:No

MeasureImageIntensity:[module_num:15|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
    Select images to measure:A594_in_Nuclei
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
ImageMath:[module_num:16|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:A594_in_Nuclei
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_LowerQuartileIntensity_A594_in_Nuclei

GaussianFilter:[module_num:17|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
    Select the input image:ImageAfterMath
    Name the output image:A594GF
    Sigma:1

EnhanceOrSuppressFeatures:[module_num:18|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
    Select the input image:A594GF
    Name the output image:A594GFenhance
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:19|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
    Select the input image:A594GFenhance
    Name the output image:A594GFenhance2
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:20|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notes:['Identify nuclear signals (FISH signals).']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
    Select the input image:A594GFenhance2
    Name the primary objects to be identified:a594signals
    Typical diameter of objects, in pixel units (Min,Max):2,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:20
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    Thresholding method:Otsu

GaussianFilter:[module_num:21|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
    Select the input image:CY3_in_Nuclei
    Name the output image:GaussianFilter
    Sigma:1

EnhanceOrSuppressFeatures:[module_num:22|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
    Select the input image:CY3_in_Nuclei
    Name the output image:CY3enhance
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:23|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
    Select the input image:CY3enhance
    Name the primary objects to be identified:CY3Spot
    Typical diameter of objects, in pixel units (Min,Max):3,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
ExpandOrShrinkObjects:[module_num:24|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
    Select the input objects:CY3Spot
    Name the output objects:ExpandCY3
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
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
IdentifySecondaryObjects:[module_num:25|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enabled:False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
    Select the input objects:preNucleiWithEdges
    Name the objects to be identified:exonWithinNucleus
    Select the method to identify the secondary objects:Propagation
    Select the input image:CY3
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MaskObjects:[module_num:26|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
    Select objects to be masked:a594signals
    Name the masked objects:a594CYcoloc
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ExpandCY3
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

FilterObjects:[module_num:27|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enabled:False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
    Select the objects to filter:a594CYcoloc
    Name the output objects:a594Top2
    Select the filtering mode:Measurements
    Select the filtering method:Maximal per object
    Select the objects that contain the filtered objects:preNucleiWithEdges
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    Measurement count:1
    Additional object count:0
    Assign overlapping child to:Both parents
    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Number_Object_Number
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
EnhanceOrSuppressFeatures:[module_num:28|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enabled:False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
    Select the input image:ImageAfterMath
    Name the output image:EnhancedA594
    Select the operation:Enhance
    Feature size:5
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:29|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notes:['Identify bright background signals in ‘MaskSignal’ image (background_foci).']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
    Select the input image:MaskA594
    Name the primary objects to be identified:background_foci
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
ExpandOrShrinkObjects:[module_num:30|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notes:['Expand "background_foci" (focalBackground).']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
    Select the input objects:background_foci
    Name the output objects:focalBackground
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:20
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
MaskImage:[module_num:31|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notes:['Add an additional mask to ‘MaskSignal" using expanded background foci (debrisSignalMask).']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
    Select the input image:MaskA594
    Name the output image:debrisSignalMask
    Use objects or an image as a mask?:Objects
    Select object for mask:focalBackground
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    Invert the mask?:Yes

MaskImage:[module_num:32|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notes:['Mask ‘Nuclei’ in signalMaskedforFISH image keeping only nuclei (MaskSignal_noInv).']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
    Select the input image:MaskA594
    Name the output image:MaskSignal_noInv
    Use objects or an image as a mask?:Objects
    Select object for mask:preNucleiWithEdges
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    Invert the mask?:No

MaskImage:[module_num:33|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notes:['Mask FISHsignals in input signal image (signalMaskedforFISH).']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
    Select the input image:A594corrected
    Name the output image:signalMaskedforFISH
    Use objects or an image as a mask?:Objects
    Select object for mask:a594signals
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    Invert the mask?:Yes

IdentifySecondaryObjects:[module_num:34|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notes:['Identify cell bodies in ‘signalMaskedforFISH’ image growing form ‘NucleiWithEdges’ (CellBodies).']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
    Select the input objects:background_foci
    Name the objects to be identified:CellBodies
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:A594corrected
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
ExpandOrShrinkObjects:[module_num:35|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notes:['Expand ‘CellBodies’ objects (expandedCellBodies).']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
    Select the input objects:CellBodies
    Name the output objects:expandedCellBodies
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:20
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
Threshold:[module_num:36|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notes:['Use a threshold to futher supress cellular background and random noise (Threshold).']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
    Select the input image:debrisSignalMask
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MaskImage:[module_num:37|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notes:['Use ‘expandedCellBodies’ to mask  ‘debrisSignalMask’ (expandedSignalMask).']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
    Select the input image:debrisSignalMask
    Name the output image:expandedSignalMask
    Use objects or an image as a mask?:Objects
    Select object for mask:expandedCellBodies
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    Invert the mask?:Yes

MaskImage:[module_num:38|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notes:['Use ‘Threshold’ to expand mask even futher (finalSignalMask).']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
    Select the input image:expandedSignalMask
    Name the output image:finalSignalMask
    Use objects or an image as a mask?:Image
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    Select image for mask:Threshold
    Invert the mask?:Yes

IdentifySecondaryObjects:[module_num:39|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notes:['Idenitfy nuclei in signal channel using ‘Nuclei’ objects and ‘MaskSignal_noInv’ image (NuclearBackgroundSignal).']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
    Select the input objects:preNucleiWithEdges
    Name the objects to be identified:NuclearBackgroundSignal
    Select the method to identify the secondary objects:Propagation
    Select the input image:MaskSignal_noInv
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureImageIntensity:[module_num:40|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notes:['Measure itensity of ‘finalSignalMask’ image to get itensity of "background" pixels (FISH signals, nuclei, cell bodies, and debris exlcuded by masking).']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
    Select images to measure:finalSignalMask
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
MeasureObjectIntensity:[module_num:41|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notes:['Measure itensity of NulcearBackgroundSignal objects in signal channel (MaskSignal_noInv).']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
    Select images to measure:MaskSignal_noInv
    Select objects to measure:NuclearBackgroundSignal

MeasureObjectIntensity:[module_num:42|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notes:['Measure intensity of FISHsignals in OrigSignal image.']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
    Select images to measure:A594corrected
    Select objects to measure:a594CYcoloc

EnhanceOrSuppressFeatures:[module_num:43|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
    Select the input image:YFPcorrected
    Name the output image:EnhanceSpeckle
    Select the operation:Enhance
    Feature size:30
    Feature type:Speckles
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    Speed and accuracy:Slow
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
EnhanceOrSuppressFeatures:[module_num:44|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enabled:False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
    Select the input image:EnhanceSpeckle
    Name the output image:EnhanceSpeckle2
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Fast
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
MaskImage:[module_num:45|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
    Select the input image:EnhanceSpeckle
    Name the output image:SpeckleNucleus
    Use objects or an image as a mask?:Objects
    Select object for mask:preNucleiWithEdges
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    Invert the mask?:No

ExpandOrShrinkObjects:[module_num:46|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notes:['create a larger circle to facilitate manual selection.  ']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
    Select the input objects:a594CYcoloc
    Name the output objects:expandedTSS
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
RelateObjects:[module_num:47|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notes:['relate expanded tss for removal']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enabled:False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
    Parent objects:expandedTSS
    Child objects:a594CYcoloc
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
ExpandOrShrinkObjects:[module_num:48|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notes:['expanded a bit to make easy for editing']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
    Select the input objects:a594CYcoloc
    Name the output objects:a594CYcolocExpand
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
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
RescaleIntensity:[module_num:49|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notes:['rescale intensity of cy3, this is only for display purpose.']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
    Select the input image:CY3enhance
    Name the output image:RescaleIntensityCY3
    Rescaling method:Divide each image by the same value
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    Divisor value:0.03
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
OverlayOutlines:[module_num:50|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensityCY3
    Name the output image:manualRef
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#3BFF20
    Select objects to display:preNucleiWithEdges
    Select outline color:#F047F1
    Select objects to display:a594CYcolocExpand

EditObjectsManually:[module_num:51|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notes:['Note as the circles are small and hard to see, my color pellete is changed to pastel1 with log norm in cellprofiler preference.']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
    Select the objects to be edited:expandedTSS
    Name the edited objects:A594manualFilter
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:manualRef
    Allow overlapping objects?:Yes

OverlayOutlines:[module_num:52|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notes:['Create new image files as reference of tss calling']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:EnhanceSpeckle
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#3BFF20
    Select objects to display:preNucleiWithEdges
    Select outline color:#CF17BC
    Select objects to display:A594manualFilter

IdentifyPrimaryObjects:[module_num:53|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notes:['identify speckle']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
    Select the input image:EnhanceSpeckle
    Name the primary objects to be identified:SpeckleFinal
    Typical diameter of objects, in pixel units (Min,Max):5,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:80
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    Thresholding method:Otsu

MeasureObjectNeighbors:[module_num:54|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
    Select objects to measure:A594manualFilter
    Select neighboring objects to measure:SpeckleFinal
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensity:[module_num:55|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notes:['measure TS intensity in a594 corrected ']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
    Select images to measure:A594corrected
    Select objects to measure:A594manualFilter, NuclearBackgroundSignal

RelateObjects:[module_num:56|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notes:['Create a parent-child relationship between the NuclearBackgroundSignal and FISHsignals objects, allowing the per-nucleus signal:noise to be later computed.']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
    Parent objects:NuclearBackgroundSignal
    Child objects:A594manualFilter
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectSizeShape:[module_num:57|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
    Select object sets to measure:SpeckleFinal
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

IdentifySecondaryObjects:[module_num:58|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enabled:False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
    Select the input objects:a594Top2
    Name the objects to be identified:cy3ForA594
    Select the method to identify the secondary objects:Propagation
    Select the input image:CY3_in_Nuclei
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
SaveImages:[module_num:59|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notes:['Savely newly created images from previous step.']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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:A594
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_segmentation
    Saved file format:png
    Output file location:Default Input Folder sub-folder|Desktop/07022021_nutlinctcf/neg_nutlin/resultManualTake2/2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:60|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notes:['Output relevant data to .csv file.']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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop/07022021_nutlinctcf/neg_nutlin/resultManualTake2/2
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:SpeckleFinal|AreaShape_Perimeter,SpeckleFinal|AreaShape_Zernike_6_4,SpeckleFinal|AreaShape_Zernike_6_6,SpeckleFinal|AreaShape_Zernike_6_0,SpeckleFinal|AreaShape_Zernike_6_2,SpeckleFinal|AreaShape_Zernike_7_7,SpeckleFinal|AreaShape_Zernike_7_5,SpeckleFinal|AreaShape_Zernike_7_1,SpeckleFinal|AreaShape_Zernike_7_3,SpeckleFinal|AreaShape_Zernike_8_4,SpeckleFinal|AreaShape_Zernike_8_2,SpeckleFinal|AreaShape_Zernike_8_8,SpeckleFinal|AreaShape_Zernike_8_0,SpeckleFinal|AreaShape_Zernike_8_6,SpeckleFinal|AreaShape_Zernike_5_1,SpeckleFinal|AreaShape_Zernike_5_5,SpeckleFinal|AreaShape_Zernike_5_3,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:negnut6hr
    Overwrite existing files without warning?:No
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