CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['This pipeline is used for split .nd2 stacks (one file with different location, one slice at each location at focal plane)']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', '"(?P<name>.*)\\." will extract base name before .nd2']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<name>.*)\.
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'âx80x94', 'Load each channel (or stain) as a separate image.  If you have a color image composed of different stains, youâx80x99ll need to specify the image type as âx80x98Color imageâx80x99 and then use a ColorToGray module in the Analysis modula panel to separate the incoming image into its component channels.', '', 'In the example pipeline, we call the two images OrigStain1 and OrigStain2.']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
    Assign a name to:Images matching rules
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    Match metadata:[{'DAPI': 'Series', 'YFP': 'Series', 'A647': 'Series', 'CY3': 'Series'}, {'DAPI': 'name', 'YFP': 'name', 'A647': 'name', 'CY3': 'name'}, {'A647': 'Z', 'CY3': 'Z', 'DAPI': 'Z', 'YFP': 'Z'}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelName "DAPI") (image does isstackframe)
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelName "YFP") (image does isstackframe)
    Name to assign these images:YFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelName "A647") (image does isstackframe)
    Name to assign these images:A647
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelName "CY3") (image does isstackframe)
    Name to assign these images:CY3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Series
    Metadata category:name

MakeProjection:[module_num:5|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
    Select the input image:A647
    Type of projection:Maximum
    Name the output image:A647maxp
    Frequency:6.0

MakeProjection:[module_num:6|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
    Select the input image:CY3
    Type of projection:Maximum
    Name the output image:CY3maxp
    Frequency:6.0

MakeProjection:[module_num:7|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
    Select the input image:DAPI
    Type of projection:Maximum
    Name the output image:DAPImaxp
    Frequency:6.0

MakeProjection:[module_num:8|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
    Select the input image:YFP
    Type of projection:Maximum
    Name the output image:YFPmaxp
    Frequency:6.0

SaveImages:[module_num:9|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notes:['if need other metadata tag, right lick on box']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
    Select the type of image to save:Image
    Select the image to save:YFPmaxp
    Select method for constructing file names:From image filename
    Select image name for file prefix:YFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_\g<Series>_YFP
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<name>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:DAPImaxp
    Select method for constructing file names:From image filename
    Select image name for file prefix:YFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_\g<Series>_DAPI
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<name>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:A647maxp
    Select method for constructing file names:From image filename
    Select image name for file prefix:YFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_\g<Series>_647
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<name>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:CY3maxp
    Select method for constructing file names:From image filename
    Select image name for file prefix:YFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_\g<Series>_CY3
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<name>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureImageQuality:[module_num:13|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enabled:False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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:No
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:No
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
ExportToSpreadsheet:[module_num:14|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enabled:False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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|/Volumes/Restricted/03022023focal/FOCAL/SCC0HR
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:ImgQuality
    Overwrite existing files without warning?:No
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